PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = official assembling objects test
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Routines
  Routine trial
    ImageComponent question_images
      image [set every repeat] = $ImageFile
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response
      allowedKeys = 'a',  'b' , 'c' , 'd'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine instructions
    TextComponent participant_instructions
      color = black
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Study the left-most box and choose which letter (a, b, c, d) the left-most box assembles to. There is only one right answer.

        Press keyboard letters (a, b, c, or d) to select your answer.
    KeyboardComponent remove_instructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator questions loopType="TrialHandler"
    conditionsFile = assembling_images/image_stimulus revised w images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'assembling_images/q1.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q2.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q3.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q4.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q5.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q6.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q7.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q8.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q9.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q10.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q11.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q12.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q13.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q14.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q15.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q16.png'), ('corrAns', 'b')])]
    Routine trial
  LoopTerminator questions
